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System:Additional%20Connections int OperatorBackLink= 1 1 0 1 // Send final state and signal information to Operator (boolean)
Storage:Session:DataIOFilter string SubjectSession= % 001 % % // three-digit session number
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 16 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 16 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= % ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= % Name % % // subject alias
Storage:Session:DataIOFilter string SubjectRun= % 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Signal%20Properties:SignalGeneratorADC int SourceCh= 16 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:SignalGeneratorADC int SampleBlockSize= 32 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:SignalGeneratorADC int SamplingRate= 256Hz 256Hz 1 % // sample rate
Source:SignalGeneratorADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 0 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 0 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 10Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 4 1 2 3 4 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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System:Configuration matrix ApplicationFilterChain= 3 { Filter%20Name Position%20String } ConnectorInput 2.9999 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain
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System:Configuration matrix SignalProcessingFilterChain= 2 { Filter%20Name Position%20String } SpatialFilter 2.B MatlabFilter 2.C // SignalProcessing filter chain
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System:Randomization int RandomSeed= 11325 0 % % // seed for the BCI2000 pseudo random number generator
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
